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System:Additional%20Connections int OperatorBackLink= 1 1 0 1 // Send final state and signal information to Operator (boolean)
Filtering:ExpressionFilter string StartRunExpression= % // expression executed on StartRun
Filtering:ExpressionFilter string StopRunExpression= % // expression executed on StopRun
Filtering:ExpressionFilter matrix Expressions= 0 1 // expressions used to compute the output of the ExpressionFilter (rows are channels; empty matrix for none)
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System:Configuration matrix SignalProcessingFilterChain= 1 { Filter%20Name Position%20String } ExpressionFilter 2.D2 // SignalProcessing filter chain
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Connector:ConnectorInput list ConnectorInputFilter= 0 // list of state names or signal elements to allow, "*" for any, signal elements as in "Signal(1,0)"
Connector:ConnectorInput string ConnectorInputAddress= % localhost:20320 % % // IP address/port to read from, e.g. localhost:20320
Application:Human%20Interface%20Devices:KeystrokeFilter string KeystrokeStateName= % // State to be translated into keystrokes (0-F), empty for off
Application:Human%20Interface%20Devices:KeystrokeFilter string KeystrokeExpression= % // Expression that evaluates to a virtual keycode, empty for off
Application:Human%20Interface%20Devices:KeystrokeFilter string KeystrokeExpressionOnStartRun= % // Expression that initializes expression variables on StartRun
Connector:ConnectorOutput string ConnectorOutputAddress= localhost:20101 localhost:20321 % % // one or more IP:Port combinations, e.g. localhost:20321
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System:Configuration matrix ApplicationFilterChain= 3 { Filter%20Name Position%20String } ConnectorInput 2.9999 KeystrokeFilter 3.1 ConnectorOutput 3.9999 // Application filter chain
Source:Signal%20Properties:DataIOFilter int SourceCh= 2 16 1 % // number of digitized and stored channels
Source:Signal%20Properties:DataIOFilter int SampleBlockSize= 32 32 1 % // number of samples transmitted at a time
Source:Signal%20Properties:DataIOFilter int SamplingRate= 256Hz 256Hz 1 % // sample rate
Source:Signal%20Properties:DataIOFilter list ChannelNames= 0 // list of channel names
Source:Signal%20Properties:DataIOFilter floatlist SourceChOffset= 2 0 0 0 % % // Offset for channels in A/D units
Source:Signal%20Properties:DataIOFilter floatlist SourceChGain= 2 0.003 0.003 0.003 % % // gain for each channel (A/D units -> muV)
Storage:Data%20Location:DataIOFilter string DataDirectory= ..\data ..\data % % // path to top level data directory (directory)
Storage:Session:DataIOFilter string SubjectName= Name Name % % // subject alias
Storage:Session:DataIOFilter string SubjectSession= 001 001 % % // three-digit session number
Storage:Session:DataIOFilter string SubjectRun= 00 00 % % // two-digit run number
Storage:Documentation:DataIOFilter string ID_System= % // BCI2000 System Code
Storage:Documentation:DataIOFilter string ID_Amp= % // BCI2000 Amp Code
Storage:Documentation:DataIOFilter string ID_Montage= % // BCI2000 Cap Montage Code
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Storage:Documentation:BCI2000FileWriter string StorageTime= % // time of beginning of data storage
Source:Alignment:AlignmentFilter int AlignChannels= 1%201 0 0 1 // align channels in time (0=no, 1=yes)
Source:Alignment:AlignmentFilter floatlist SourceChTimeOffset= 0 0 % % // time offsets for all source channels (may be empty)
Source:Online%20Processing:TransmissionFilter list TransmitChList= 1 2 // list of transmitted channels
System:Additional%20Connections:EventLink int EventLink= 1 1 0 1 // Send events from Operator to Source module (boolean)
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System:Configuration matrix SignalSourceFilterChain= 8 { Filter%20Name Position%20String } DataIOFilter 0 DatalogADC 1 NullFileWriter 1 BCI2000FileWriter 1 EDFFileWriter 1 GDFFileWriter 1 AlignmentFilter 1.1 TransmissionFilter 1.2 // SignalSource filter chain
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System:Randomization int RandomSeed= 29301 0 % % // seed for the BCI2000 pseudo random number generator
System:Randomization int RandomizationWarning= 1 1 0 1 // warn if subsequent Runs have identical RandomSeed value (boolean)
